<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_mricore</dll>
            <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_mricore</dll>
            <classname>GadgetIsmrmrdWaveformMessageReader</classname>
        </reader>
    </readers>
    <writers>
        <writer>
            <dll>gadgetron_mricore</dll>
            <classname>MRIImageWriter</classname>
        </writer>
    </writers>

    <stream>


        <!-- <gadget>
            <name>RemoveROOversampling</name>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget> -->

        <gadget>
            <name>AccTrig</name>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property>
                <name>trigger_dimension</name>
                <value>repetition</value>
            </property>
            <property>
                <name>sorting_dimension</name>
                <value>contrast</value>
            </property>
        </gadget>

        <gadget>
            <name>Buff</name>
            <dll>gadgetron_mricore</dll>
            <classname>BucketToBufferGadget</classname>
            <property>
                <name>N_dimension</name>
                <value></value>
            </property>
            <property>
                <name>S_dimension</name>
                <value>set</value>
            </property>
            <property>
                <name>split_slices</name>
                <value>false</value>
            </property>
            <property>
                <name>verbose</name>
                <value>true</value>
            </property>
        </gadget>

        <external><execute name="passthrough" target="Passthrough" type="python"/><configuration/></external> 
	<!--<external><connect port="18000" /><configuration /></external>-->
<!-- 
        <gadget>
            <name>SimpleRecon</name>
            <dll>gadgetron_mricore</dll>
            <classname>SimpleReconGadget</classname>
        </gadget> -->


        <gadget>
          <name>Recon</name>
          <dll>gadgetron_mricore</dll>
          <classname>GenericReconCartesianFFTGadget</classname>

        <property><name>image_series</name><value>0</value></property>

        <property><name>coil_map_algorithm</name><value>Inati</value></property>

        <property><name>debug_folder</name><value></value></property>
          <property><name>perform_timing</name><value>true</value></property>
          <property><name>verbose</name><value>true</value></property>

      </gadget>



        <gadget>
            <name>ImageArraySplit</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageArraySplitGadget</classname>
        </gadget>

        <gadget>
            <name>Extract</name>
            <dll>gadgetron_mricore</dll>
            <classname>ExtractGadget</classname>
        </gadget>

        <gadget>
          <name>AutoScale</name>
          <dll>gadgetron_mricore</dll>
          <classname>AutoScaleGadget</classname>
        </gadget>


        <gadget>
          <name>FloatToShort</name>
          <dll>gadgetron_mricore</dll>
          <classname>FloatToUShortGadget</classname>
        </gadget>

        <gadget>
            <name>ImageFinish</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageFinishGadget</classname>
        </gadget>
    </stream>

</configuration>
